//execute1("celltypes.element(\"TC4\")")

begintemplate TC4
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, apic, dend, axon
public all, somatic, axonal, basal, apical

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma, apic[144], dend[14], axon

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 8 connect apic[i](0), apic[i-1](1)
  connect apic[9](0), apic[7](1)
  connect apic[10](0), apic[6](1)
  connect apic[11](0), apic[5](1)
  for i = 12, 13 connect apic[i](0), apic[i-1](1)
  connect apic[14](0), apic[12](1)
  connect apic[15](0), apic[11](1)
  connect apic[16](0), apic[4](1)
  connect apic[17](0), apic[3](1)
  for i = 18, 24 connect apic[i](0), apic[i-1](1)
  connect apic[25](0), apic[23](1)
  connect apic[26](0), apic[22](1)
  for i = 27, 28 connect apic[i](0), apic[26](1)
  connect apic[29](0), apic[21](1)
  connect apic[30](0), apic[20](1)
  connect apic[31](0), apic[19](1)
  connect apic[32](0), apic[18](1)
  connect apic[33](0), apic[17](1)
  connect apic[34](0), apic[2](1)
  for i = 35, 43 connect apic[i](0), apic[i-1](1)
  connect apic[44](0), apic[42](1)
  connect apic[45](0), apic[41](1)
  connect apic[46](0), apic[40](1)
  connect apic[47](0), apic[39](1)
  for i = 48, 49 connect apic[i](0), apic[47](1)
  connect apic[50](0), apic[38](1)
  connect apic[51](0), apic[37](1)
  for i = 52, 55 connect apic[i](0), apic[i-1](1)
  connect apic[56](0), apic[54](1)
  connect apic[57](0), apic[53](1)
  connect apic[58](0), apic[52](1)
  connect apic[59](0), apic[51](1)
  connect apic[60](0), apic[36](1)
  connect apic[61](0), apic[35](1)
  for i = 62, 64 connect apic[i](0), apic[i-1](1)
  connect apic[65](0), apic[63](1)
  connect apic[66](0), apic[62](1)
  for i = 67, 68 connect apic[i](0), apic[66](1)
  connect apic[69](0), apic[61](1)
  connect apic[70](0), apic[34](1)
  for i = 71, 76 connect apic[i](0), apic[i-1](1)
  connect apic[77](0), apic[75](1)
  connect apic[78](0), apic[74](1)
  connect apic[79](0), apic[73](1)
  for i = 80, 81 connect apic[i](0), apic[i-1](1)
  connect apic[82](0), apic[80](1)
  connect apic[83](0), apic[79](1)
  for i = 84, 85 connect apic[i](0), apic[83](1)
  connect apic[86](0), apic[72](1)
  for i = 87, 88 connect apic[i](0), apic[86](1)
  connect apic[89](0), apic[71](1)
  for i = 90, 95 connect apic[i](0), apic[i-1](1)
  connect apic[96](0), apic[94](1)
  connect apic[97](0), apic[93](1)
  connect apic[98](0), apic[92](1)
  connect apic[99](0), apic[91](1)
  connect apic[100](0), apic[90](1)
  connect apic[101](0), apic[89](1)
  for i = 102, 106 connect apic[i](0), apic[i-1](1)
  connect apic[107](0), apic[105](1)
  connect apic[108](0), apic[104](1)
  connect apic[109](0), apic[103](1)
  connect apic[110](0), apic[102](1)
  for i = 111, 112 connect apic[i](0), apic[110](1)
  connect apic[113](0), apic[101](1)
  connect apic[114](0), apic[70](1)
  for i = 115, 116 connect apic[i](0), apic[114](1)
  connect apic[117](0), apic[1](1)
  for i = 118, 122 connect apic[i](0), apic[i-1](1)
  connect apic[123](0), apic[121](1)
  connect apic[124](0), apic[120](1)
  for i = 125, 127 connect apic[i](0), apic[i-1](1)
  connect apic[128](0), apic[126](1)
  connect apic[129](0), apic[125](1)
  connect apic[130](0), apic[124](1)
  connect apic[131](0), apic[119](1)
  connect apic[132](0), apic[118](1)
  for i = 133, 134 connect apic[i](0), apic[i-1](1)
  connect apic[135](0), apic[133](1)
  for i = 136, 137 connect apic[i](0), apic[135](1)
  connect apic[138](0), apic[132](1)
  connect apic[139](0), apic[117](1)
  for i = 140, 141 connect apic[i](0), apic[i-1](1)
  connect apic[142](0), apic[140](1)
  connect apic[143](0), apic[139](1)
  connect dend(0), apic(1)
  for i = 1, 2 connect dend[i](0), dend(1)
  connect dend[3](0), soma(0.5)
  for i = 4, 5 connect dend[i](0), dend[i-1](1)
  connect dend[6](0), dend[4](1)
  connect dend[7](0), dend[3](1)
  for i = 8, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  connect dend[11](0), soma(0.5)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  connect axon(0), dend[7](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-3.583, 0, 0, 7.166)
	pt3dadd(0, 0, 0, 7.166)
	pt3dadd(3.583, 0, 0, 7.166)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(-2.46, -2.28, -1.52, 3.97)
	pt3dadd(-3.83, -6.55, -1.33, 2.83)
	pt3dadd(-4.68, -9.18, -1.53, 2.95)
	pt3dadd(-4.86, -10.93, -2.13, 2.61)
	pt3dadd(-3.28, -12.07, -2.61, 2.61)
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  }
}
proc shape3d_2() {
  dend[2] {	pt3dadd(71.98, -5.42, 18.68, 0.68)
	pt3dadd(74, -6.45, 17.61, 0.68)
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  }
}
proc shape3d_3() {
  apic[1] {	pt3dadd(-1.97, -23.52, -5.71, 2.27)
	pt3dadd(-2.88, -24.93, -6.27, 2.27)
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  }
}
proc shape3d_4() {
  apic[30] {	pt3dadd(-63.38, -65.81, 21.51, 0.11)
	pt3dadd(-64.43, -66.66, 21.92, 0.11)
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  }
}
proc shape3d_5() {
  apic[56] {	pt3dadd(-49.04, -47.81, 21.45, 0.45)
	pt3dadd(-48.06, -47.49, 21.48, 0.45)
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  }
}
proc shape3d_6() {
  apic[79] {  }
  apic[80] {pt3dclear()
	pt3dadd(-80.59, -89.16, 1.96, 0.57)
	pt3dadd(-79.8, -89.72, 1.15, 0.68)
	pt3dadd(-80.36, -90.86, -0.67, 0.68)
	pt3dadd(-80.45, -92.91, -1.04, 0.45)
	pt3dadd(-80.95, -94.31, -1.35, 0.45)
	pt3dadd(-82.04, -95.18, -1.59, 0.45)
	pt3dadd(-82.09, -96.33, -1.28, 0.45)
	pt3dadd(-82.19, -95.89, -3.13, 0.45)
	pt3dadd(-80.92, -98.47, -1.61, 0.34)
  }
  apic[81] {pt3dclear()
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  }
}
proc shape3d_7() {
  apic[106] {	pt3dadd(-83.52, -101.35, -7.46, 0.34)
	pt3dadd(-84.15, -102.34, -8.04, 0.34)
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  }
}
proc shape3d_8() {
  apic[132] {	pt3dadd(-67.4, -84.68, -12.58, 0.91)
	pt3dadd(-67.8, -87.59, -13.63, 0.68)
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  }
}
proc shape3d_9() {
  dend[5] {	pt3dadd(70.04, 36.01, -90.9, 0.45)
	pt3dadd(70.5, 35.34, -91.71, 0.45)
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  }
}
proc shape3d_10() {
  dend[6] {	pt3dadd(220.87, 25.15, -118.35, 0.45)
	pt3dadd(222.26, 25.54, -118.83, 0.45)
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  }
}
proc shape3d_11() {
  dend[9] {	pt3dadd(21.63, 102.81, -114.07, 1.36)
	pt3dadd(21.39, 104.47, -113.64, 1.36)
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  }
}
proc shape3d_12() {
  dend[9] {	pt3dadd(59.83, 187.3, -267.81, 0.79)
	pt3dadd(59.22, 186.7, -268.87, 0.79)
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  }
}
proc shape3d_13() {
  dend[10] {	pt3dadd(-109.34, 108.47, -82.57, 1.25)
	pt3dadd(-110.18, 107.97, -82.96, 1.25)
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  }
}
proc shape3d_14() {
  dend[12] {	pt3dadd(-35.46, 14.91, 2.5, 0.45)
	pt3dadd(-35.18, 15.98, 3.2, 0.45)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 143 apic[i] all.append()
    for i=0, 13 dend[i] all.append()
    axon all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 13 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 143 apic[i] apical.append()

}
proc geom() {
  forsec all {  }
}
external lambda_f
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec all    {
    insert pas
    insert CaPool
    insert Na
    insert Kd
    insert LCa
    insert Kslow
    insert KA
    insert KCa
  }
  forsec apical {
    insert CaT
    insert Ih
  }
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  axon nc = new NetCon(&v(1), $o1)
  nc.threshold = 0
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate TC4
