//execute1("celltypes.element(\"MC\")")

begintemplate MC
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, apic, dend, axon
public all, somatic, axonal, basal, apical

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma, apic[134], dend[36], axon

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 5 connect apic[i](0), apic[i-1](1)
  for i = 6, 7 connect apic[i](0), apic[4](1)
  connect apic[8](0), apic[3](1)
  for i = 9, 11 connect apic[i](0), apic[i-1](1)
  connect apic[12](0), apic[10](1)
  for i = 13, 14 connect apic[i](0), apic[12](1)
  connect apic[15](0), apic[9](1)
  for i = 16, 17 connect apic[i](0), apic[15](1)
  for i = 18, 19 connect apic[i](0), apic[i-1](1)
  connect apic[20](0), apic[18](1)
  connect apic[21](0), apic[17](1)
  for i = 22, 23 connect apic[i](0), apic[21](1)
  for i = 24, 25 connect apic[i](0), apic[23](1)
  connect apic[26](0), apic[8](1)
  for i = 27, 30 connect apic[i](0), apic[i-1](1)
  connect apic[31](0), apic[29](1)
  for i = 32, 33 connect apic[i](0), apic[i-1](1)
  connect apic[34](0), apic[32](1)
  connect apic[35](0), apic[31](1)
  for i = 36, 37 connect apic[i](0), apic[35](1)
  connect apic[38](0), apic[28](1)
  connect apic[39](0), apic[27](1)
  for i = 40, 41 connect apic[i](0), apic[i-1](1)
  connect apic[42](0), apic[40](1)
  for i = 43, 44 connect apic[i](0), apic[42](1)
  connect apic[45](0), apic[39](1)
  for i = 46, 47 connect apic[i](0), apic[i-1](1)
  connect apic[48](0), apic[46](1)
  for i = 49, 50 connect apic[i](0), apic[48](1)
  for i = 51, 52 connect apic[i](0), apic[45](1)
  for i = 53, 54 connect apic[i](0), apic[52](1)
  connect apic[55](0), apic[26](1)
  for i = 56, 57 connect apic[i](0), apic[i-1](1)
  connect apic[58](0), apic[56](1)
  connect apic[59](0), apic[55](1)
  for i = 60, 61 connect apic[i](0), apic[59](1)
  for i = 62, 63 connect apic[i](0), apic[i-1](1)
  connect apic[64](0), apic[62](1)
  for i = 65, 66 connect apic[i](0), apic[64](1)
  connect apic[67](0), apic[61](1)
  connect apic[68](0), apic[2](1)
  for i = 69, 73 connect apic[i](0), apic[i-1](1)
  connect apic[74](0), apic[72](1)
  connect apic[75](0), apic[71](1)
  for i = 76, 77 connect apic[i](0), apic[i-1](1)
  connect apic[78](0), apic[76](1)
  connect apic[79](0), apic[75](1)
  for i = 80, 81 connect apic[i](0), apic[i-1](1)
  connect apic[82](0), apic[80](1)
  connect apic[83](0), apic[79](1)
  connect apic[84](0), apic[70](1)
  connect apic[85](0), apic[69](1)
  for i = 86, 87 connect apic[i](0), apic[85](1)
  for i = 88, 89 connect apic[i](0), apic[i-1](1)
  connect apic[90](0), apic[88](1)
  connect apic[91](0), apic[87](1)
  for i = 92, 93 connect apic[i](0), apic[91](1)
  for i = 94, 95 connect apic[i](0), apic[93](1)
  connect apic[96](0), apic[68](1)
  for i = 97, 100 connect apic[i](0), apic[i-1](1)
  connect apic[101](0), apic[99](1)
  connect apic[102](0), apic[98](1)
  for i = 103, 104 connect apic[i](0), apic[i-1](1)
  connect apic[105](0), apic[103](1)
  for i = 106, 107 connect apic[i](0), apic[105](1)
  for i = 108, 109 connect apic[i](0), apic[107](1)
  connect apic[110](0), apic[102](1)
  connect apic[111](0), apic[97](1)
  for i = 112, 113 connect apic[i](0), apic[i-1](1)
  connect apic[114](0), apic[112](1)
  for i = 115, 116 connect apic[i](0), apic[114](1)
  for i = 117, 118 connect apic[i](0), apic[116](1)
  connect apic[119](0), apic[111](1)
  for i = 120, 122 connect apic[i](0), apic[i-1](1)
  connect apic[123](0), apic[121](1)
  for i = 124, 125 connect apic[i](0), apic[120](1)
  connect apic[126](0), apic[119](1)
  connect apic[127](0), apic[96](1)
  for i = 128, 129 connect apic[i](0), apic[127](1)
  for i = 130, 131 connect apic[i](0), apic[i-1](1)
  connect apic[132](0), apic[130](1)
  connect apic[133](0), apic[129](1)
  connect dend(0), apic(1)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  connect dend[4](0), dend(1)
  for i = 5, 6 connect dend[i](0), dend[i-1](1)
  connect dend[7](0), dend[5](1)
  connect dend[8](0), dend[4](1)
  for i = 9, 10 connect dend[i](0), dend[8](1)
  connect dend[11](0), apic[1](1)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  for i = 14, 15 connect dend[i](0), soma(0.5)
  for i = 16, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  connect dend[21](0), dend[17](1)
  for i = 22, 23 connect dend[i](0), dend[21](1)
  connect dend[24](0), dend[16](1)
  for i = 25, 26 connect dend[i](0), dend[24](1)
  connect dend[27](0), dend[15](1)
  for i = 28, 29 connect dend[i](0), dend[i-1](1)
  connect dend[30](0), dend[28](1)
  connect dend[31](0), dend[27](1)
  for i = 32, 33 connect dend[i](0), dend[i-1](1)
  connect dend[34](0), dend[32](1)
  connect dend[35](0), dend[31](1)
  connect axon(0), soma(0.5)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-13.36, 0, 0, 26.72)
	pt3dadd(0, 0, 0, 26.72)
	pt3dadd(13.36, 0, 0, 26.72)
  }
  apic {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(19.94, 0.9, -3.4, 6.79)
	pt3dadd(19.94, 0.9, -4.69, 6.79)
	pt3dadd(20.19, 1.01, -7.51, 6.64)
	pt3dadd(20.8, 1.42, -9.51, 6.64)
	pt3dadd(21.76, 1.96, -9.85, 6.56)
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  }
}
proc shape3d_2() {
  dend[1] {	pt3dadd(51.72, 165.45, -86.8, 0.97)
	pt3dadd(51.47, 167.05, -86.8, 0.97)
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  }
}
proc shape3d_3() {
  dend[5] {	pt3dadd(44.44, 251.66, -56.65, 1.49)
	pt3dadd(45.51, 253.46, -56.65, 0.75)
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  }
}
proc shape3d_4() {
  dend[6] {	pt3dadd(115.51, 496.65, -69.11, 0.67)
	pt3dadd(115.81, 497.95, -69.11, 1.42)
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  }
}
proc shape3d_5() {
  dend[7] {	pt3dadd(41.21, 310.86, -58.2, 0.67)
	pt3dadd(41.95, 312.16, -58.09, 0.52)
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  }
}
proc shape3d_6() {
  dend[8] {	pt3dadd(18.03, 145.96, -46, 0.97)
	pt3dadd(17.88, 146.96, -46.29, 0.97)
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  }
}
proc shape3d_7() {
  dend[8] {	pt3dadd(25.41, 337.96, -93.01, 0.52)
	pt3dadd(24.9, 338.76, -93.41, 0.9)
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  }
}
proc shape3d_8() {
  dend[11] {	pt3dadd(114.36, -190.62, -26.6, 1.49)
	pt3dadd(114.66, -191.62, -26.6, 1.49)
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  }
}
proc shape3d_9() {
  dend[13] {	pt3dadd(134.15, -333.12, -31.35, 2.01)
	pt3dadd(134.65, -334.72, -31.87, 1.42)
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  }
}
proc shape3d_10() {
  dend[13] {	pt3dadd(158.43, -580.22, -17.54, 0.6)
	pt3dadd(158.43, -581.62, -16.76, 0.97)
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  }
}
proc shape3d_11() {
  apic[2] {	pt3dadd(163.78, 58.67, -21.35, 3.43)
	pt3dadd(164.78, 58.68, -21.37, 3.51)
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  }
}
proc shape3d_12() {
  apic[12] {	pt3dadd(277.08, 63.59, -34.84, 1.19)
  }
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  }
}
proc shape3d_13() {
  apic[29] {	pt3dadd(287.48, 73.13, -37.04, 1.12)
	pt3dadd(287.38, 72.22, -36.4, 1.12)
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  }
}
proc shape3d_14() {
  apic[49] {	pt3dadd(271.78, 97.54, -40.04, 0.15)
	pt3dadd(272.38, 98.34, -40.04, 0.15)
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  }
}
proc shape3d_15() {
  apic[64] {  }
  apic[65] {pt3dclear()
	pt3dadd(299.78, 110.83, -37.5, 0.37)
	pt3dadd(299.28, 110.33, -38.34, 0.22)
	pt3dadd(299.18, 109.33, -38.5, 0.52)
  }
  apic[66] {pt3dclear()
	pt3dadd(299.78, 110.83, -37.5, 0.37)
	pt3dadd(301.28, 111.03, -37.84, 0.52)
	pt3dadd(302.08, 111.43, -37.29, 0.45)
	pt3dadd(302.88, 111.73, -37.9, 0.37)
	pt3dadd(303.88, 112.03, -37.9, 0.37)
	pt3dadd(304.58, 113.03, -37.9, 0.37)
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  }
}
proc shape3d_16() {
  apic[80] {	pt3dadd(289.08, 98.54, -35.45, 0.52)
	pt3dadd(289.98, 98.94, -35.75, 0.52)
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  }
}
proc shape3d_17() {
  apic[96] {	pt3dadd(232.68, 100.74, -23.26, 1.94)
	pt3dadd(233.18, 101.74, -23.26, 1.94)
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  }
}
proc shape3d_18() {
  apic[114] {	pt3dadd(278.38, 98.24, -34.54, 0.9)
	pt3dadd(280.28, 97.84, -34.59, 1.12)
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  }
}
proc shape3d_19() {
  apic[127] {	pt3dadd(285.88, 119.54, -34.29, 0.67)
	pt3dadd(286.88, 119.84, -35.59, 1.27)
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  }
}
proc shape3d_20() {
  dend[14] {	pt3dadd(36.51, 164.56, -4.55, 0.9)
	pt3dadd(36.26, 165.56, -3.9, 0.9)
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  }
}
proc shape3d_21() {
  dend[14] {	pt3dadd(62.02, 385.25, -2.32, 0.6)
	pt3dadd(62.95, 385.95, -2.32, 0.6)
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  }
}
proc shape3d_22() {
  dend[14] {	pt3dadd(142.92, 597.55, -28.1, 0.3)
	pt3dadd(143.72, 598.85, -28.12, 0.6)
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  }
}
proc shape3d_23() {
  dend[18] {	pt3dadd(81.99, -228.22, -15.26, 1.04)
	pt3dadd(82.09, -229.22, -15.26, 1.04)
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  }
}
proc shape3d_24() {
  dend[20] {	pt3dadd(141.65, -353.62, -31.29, 0.37)
	pt3dadd(141.75, -354.72, -31.45, 0.37)
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  }
}
proc shape3d_25() {
  dend[22] {	pt3dadd(53.98, -144.42, -32.29, 0.45)
	pt3dadd(54.11, -145.52, -32.29, 0.45)
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  }
}
proc shape3d_26() {
  dend[22] {	pt3dadd(125.64, -385.02, -72.01, 0.37)
	pt3dadd(125.04, -386.02, -72.11, 0.37)
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  }
}
proc shape3d_27() {
  dend[23] {	pt3dadd(62.72, -76.76, -49.65, 0.6)
	pt3dadd(62.44, -75.93, -50.15, 0.52)
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  }
}
proc shape3d_28() {
  dend[25] {	pt3dadd(74.29, -208.12, -2.65, 1.19)
	pt3dadd(73.7, -209.82, -2.4, 0.52)
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  }
}
proc shape3d_29() {
  dend[26] {	pt3dadd(114.95, -268.52, -49.45, 0.82)
	pt3dadd(115.55, -270.32, -49.45, 0.45)
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  }
}
proc shape3d_30() {
  dend[27] {	pt3dadd(9.18, -20.73, -17.37, 2.01)
	pt3dadd(9.24, -20.44, -19.45, 2.01)
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  }
}
proc shape3d_31() {
  dend[30] {	pt3dadd(51.69, 32.83, -60.65, 0.97)
	pt3dadd(51.3, 33.9, -61, 0.6)
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  }
}
proc shape3d_32() {
  dend[33] {	pt3dadd(63.5, 70.7, -59.95, 0.6)
	pt3dadd(63.4, 70.26, -61.15, 0.67)
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  }
}
proc shape3d_33() {
  dend[34] {	pt3dadd(25.02, 149.66, -64.51, 0.75)
	pt3dadd(26.2, 149.86, -65.05, 0.6)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 133 apic[i] all.append()
    for i=0, 35 dend[i] all.append()
    axon all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 35 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 133 apic[i] apical.append()

}
proc geom() {
}
external lambda_f
proc geom_nseg() {
}
proc biophys() {
  forsec all {

    Ra = 70
    cm = 1.2

    insert pas
        g_pas = 60.0/1000000
        e_pas = -65

    insert na
        ena = 60
		gbar_na = 0.36

    insert kd
        ek = -90
		gbar_kd = 0.033

	insert Ih
	    gkhbar = 0.0024

  }
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 0
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate MC
